PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Soloproject
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent priming
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $words
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  Routine task
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        What should the person do in the given situation ?

        Press 'A' key for first option
        Press 'B' key for second option
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      text [set every repeat] = $task
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    KeyboardComponent key_resp
      allowedKeys = 'a','b'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = priming_words.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'words': 'fear'},
      {'words': 'death'},
      {'words': 'kill'},
      {'words': 'grave'},
      {'words': 'murder'},
      {'words': 'stab'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = dillema_moral.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'task': 'A person is walking alone at night when suddenly they are confronted by a masked assailant with a weapon. The individual has a concealed weapon and must decide whether to use it to defend themselves, risking harm to the aggressor, or to try to escape without resorting to violence.'},
      {'task': 'A parent discovers that their child is being bullied at school. They are torn between advising their child to stand up for themselves (potentially encouraging aggression) or advocating for a peaceful resolution through communication and involving school authorities.'},
      {'task': 'A soldier receives orders to engage in a military operation that involves aggressive actions, such as an airstrike on a location where there may be civilian casualties. The soldier must decide whether to follow orders, potentially causing harm to innocent people, or to disobey orders, risking severe consequences.'},
      {'task': 'A police officer faces a situation where a suspect is violently resisting arrest. The officer must decide whether to use force to subdue the individual, risking injury, or to continue attempting non-aggressive methods, potentially allowing the suspect to escape or cause harm to others.'},
      {'task': 'A country is under the threat of a neighboring nation that has shown aggression. The government must decide whether to launch a preemptive strike to protect its citizens, risking a full-scale war, or to pursue diplomatic solutions, potentially endangering the safety of its people.'}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
    Routine task
  LoopTerminator trials_2
